proc celldef() {
  topol()
  subsets()
  geom()
  geom_nseg()
  biophys()
}

create soma, axon[5], dend[22], apic[116]

proc topol() { local i
  connect axon(0), soma(0.5)
  for i = 1, 2 connect axon[i](0), axon(1)
  for i = 3, 4 connect axon[i](0), axon[2](1)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  connect dend[3](0), soma(0.5)
  for i = 4, 6 connect dend[i](0), dend[i-1](1)
  connect dend[7](0), dend[5](1)
  connect dend[8](0), dend[4](1)
  connect dend[9](0), dend[3](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), soma(0.5)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  connect dend[15](0), soma(0.5)
  for i = 16, 17 connect dend[i](0), dend[i-1](1)
  connect dend[18](0), dend[16](1)
  connect dend[19](0), dend[15](1)
  for i = 20, 21 connect dend[i](0), dend[19](1)
  connect apic(0), soma(0.5)
  for i = 1, 33 connect apic[i](0), apic[i-1](1)
  connect apic[34](0), apic[32](1)
  for i = 35, 40 connect apic[i](0), apic[i-1](1)
  connect apic[41](0), apic[39](1)
  connect apic[42](0), apic[38](1)
  for i = 43, 44 connect apic[i](0), apic[42](1)
  connect apic[45](0), apic[37](1)
  connect apic[46](0), apic[36](1)
  connect apic[47](0), apic[35](1)
  for i = 48, 50 connect apic[i](0), apic[i-1](1)
  connect apic[51](0), apic[49](1)
  connect apic[52](0), apic[48](1)
  connect apic[53](0), apic[47](1)
  for i = 54, 55 connect apic[i](0), apic[53](1)
  for i = 56, 57 connect apic[i](0), apic[55](1)
  connect apic[58](0), apic[34](1)
  connect apic[59](0), apic[32](1)
  connect apic[60](0), apic[31](1)
  connect apic[61](0), apic[30](1)
  connect apic[62](0), apic[28](1)
  for i = 63, 64 connect apic[i](0), apic[i-1](1)
  connect apic[65](0), apic[63](1)
  connect apic[66](0), apic[62](1)
  connect apic[67](0), apic[26](1)
  for i = 68, 69 connect apic[i](0), apic[i-1](1)
  connect apic[70](0), apic[68](1)
  connect apic[71](0), apic[67](1)
  connect apic[72](0), apic[24](1)
  for i = 73, 74 connect apic[i](0), apic[i-1](1)
  connect apic[75](0), apic[73](1)
  connect apic[76](0), apic[72](1)
  connect apic[77](0), apic[21](1)
  for i = 78, 79 connect apic[i](0), apic[i-1](1)
  connect apic[80](0), apic[78](1)
  connect apic[81](0), apic[77](1)
  for i = 82, 83 connect apic[i](0), apic[81](1)
  connect apic[84](0), apic[18](1)
  for i = 85, 86 connect apic[i](0), apic[84](1)
  connect apic[87](0), apic[16](1)
  for i = 88, 89 connect apic[i](0), apic[87](1)
  for i = 90, 91 connect apic[i](0), apic[89](1)
  connect apic[92](0), apic[14](1)
  for i = 93, 94 connect apic[i](0), apic[92](1)
  connect apic[95](0), apic[12](1)
  connect apic[96](0), apic[10](1)
  for i = 97, 98 connect apic[i](0), apic[96](1)
  for i = 99, 100 connect apic[i](0), apic[98](1)
  connect apic[101](0), apic[8](1)
  connect apic[102](0), apic[6](1)
  for i = 103, 104 connect apic[i](0), apic[i-1](1)
  connect apic[105](0), apic[103](1)
  connect apic[106](0), apic[102](1)
  connect apic[107](0), apic[4](1)
  for i = 108, 109 connect apic[i](0), apic[107](1)
  connect apic[110](0), apic[2](1)
  connect apic[111](0), apic(1)
  for i = 112, 113 connect apic[i](0), apic[i-1](1)
  connect apic[114](0), apic[112](1)
  connect apic[115](0), apic[111](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-27.5691, -25.7019, -11.2267, 3.34593)
	pt3dadd(-25.8962, -24.513, -11.2272, 4.61781)
	pt3dadd(-24.2233, -23.3241, -11.2277, 7.41911)
	pt3dadd(-22.5504, -22.1353, -11.2281, 10.1536)
	pt3dadd(-20.8775, -20.9464, -11.2286, 13.1245)
	pt3dadd(-19.2046, -19.7575, -11.2291, 16.5968)
	pt3dadd(-17.5317, -18.5687, -11.2296, 19.309)
	pt3dadd(-15.8588, -17.3798, -11.23, 20.7451)
	pt3dadd(-14.186, -16.1909, -11.2305, 21.9152)
	pt3dadd(-12.5131, -15.002, -11.231, 23.4869)
	pt3dadd(-10.8402, -13.8132, -11.2314, 24.2404)
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  }
}
proc shape3d_2() {
  axon {	pt3dadd(76.67, 41.97, -38.25, 0.52)
	pt3dadd(77.03, 41.74, -38.25, 0.52)
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  }
}
proc shape3d_3() {
  axon[1] {	pt3dadd(156.37, 5.55, -64, 0.44)
	pt3dadd(156.45, 5.47, -64, 0.44)
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  }
}
proc shape3d_4() {
  axon[3] {	pt3dadd(166.68, 34.96, -55.25, 0.3)
	pt3dadd(167.13, 34.8, -55.25, 0.3)
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  }
}
proc shape3d_5() {
  axon[3] {	pt3dadd(209.92, -50.15, -72.95, 0.3)
	pt3dadd(209.73, -51.7, -72.95, 0.22)
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  }
}
proc shape3d_6() {
  axon[4] {	pt3dadd(161.6, 73, -72.3, 0.22)
	pt3dadd(161.53, 73.15, -72.3, 0.22)
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  }
}
proc shape3d_7() {
  dend[1] {	pt3dadd(10.99, 72.26, -22.1, 0.3)
	pt3dadd(10.63, 72.56, -22.15, 0.3)
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  }
}
proc shape3d_8() {
  dend[2] {	pt3dadd(55.79, 71.61, -36.55, 0.22)
	pt3dadd(56.84, 72.03, -36.15, 0.22)
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  }
}
proc shape3d_9() {
  dend[4] {	pt3dadd(15.89, 2.98, -24.95, 0.52)
	pt3dadd(16.27, 3.34, -24.95, 0.52)
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  }
}
proc shape3d_10() {
  dend[6] {	pt3dadd(102.6, 27.81, -31.3, 0.44)
	pt3dadd(102.9, 28.1, -31.3, 0.44)
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  }
}
proc shape3d_11() {
  dend[7] {	pt3dadd(63.99, 35.01, -30.65, 0.44)
	pt3dadd(64.06, 35.15, -30.7, 0.44)
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  }
}
proc shape3d_12() {
  dend[7] {	pt3dadd(139.01, 97.63, -43.7, 0.37)
	pt3dadd(139.24, 97.84, -43.7, 0.37)
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  }
}
proc shape3d_13() {
  dend[10] {	pt3dadd(31.92, -20.11, -27.45, 0.3)
	pt3dadd(32.14, -20.49, -27.45, 0.3)
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  }
}
proc shape3d_14() {
  dend[11] {	pt3dadd(58.78, -16.96, -33.5, 0.3)
	pt3dadd(59.45, -16.98, -33.5, 0.3)
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  }
}
proc shape3d_15() {
  dend[13] {	pt3dadd(43.31, 5.12, -65, 0.22)
	pt3dadd(43.39, 5.49, -65, 0.22)
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  }
}
proc shape3d_16() {
  dend[14] {	pt3dadd(73.33, 39.23, -48.7, 0.22)
	pt3dadd(73.93, 39.51, -48.7, 0.22)
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  }
}
proc shape3d_17() {
  dend[18] {	pt3dadd(29.83, -11.71, -55.15, 0.3)
	pt3dadd(30.42, -11.73, -55.1, 0.3)
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  }
}
proc shape3d_18() {
  dend[20] {	pt3dadd(83.98, 43.92, -77.7, 0.22)
	pt3dadd(84.58, 43.98, -77.7, 0.22)
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  }
}
proc shape3d_19() {
  dend[21] {	pt3dadd(97.11, 19.41, -66.85, 0.22)
	pt3dadd(97.78, 19.69, -68, 0.22)
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  }
}
proc shape3d_20() {
  apic[12] {	pt3dadd(-68.99, -79.11, -27.5, 1.26)
	pt3dadd(-69.28, -79.55, -27.5, 1.26)
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  }
}
proc shape3d_21() {
  apic[23] {	pt3dadd(-125.68, -144.15, -23.4, 1.26)
	pt3dadd(-126.35, -144.74, -23.4, 1.26)
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  }
}
proc shape3d_22() {
  apic[36] {	pt3dadd(-189.8, -226.55, -27.65, 1.11)
	pt3dadd(-190.02, -227, -27.65, 1.11)
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  }
}
proc shape3d_23() {
  apic[39] {	pt3dadd(-238.49, -275.7, -21.9, 0.81)
	pt3dadd(-238.93, -275.41, -21.9, 0.81)
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  }
}
proc shape3d_24() {
  apic[40] {	pt3dadd(-308.06, -265.91, -39.85, 0.37)
	pt3dadd(-308.43, -265.61, -39.9, 0.37)
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  }
}
proc shape3d_25() {
  apic[41] {	pt3dadd(-293.27, -288.1, -31.75, 0.37)
	pt3dadd(-294.01, -288.17, -31.75, 0.37)
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  }
}
proc shape3d_26() {
  apic[41] {	pt3dadd(-367.27, -324.13, -32.45, 0.37)
	pt3dadd(-367.57, -324.21, -32.45, 0.37)
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  }
}
proc shape3d_27() {
  apic[41] {	pt3dadd(-439, -354.16, -45.9, 0.3)
	pt3dadd(-439.15, -354.39, -45.9, 0.3)
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  }
}
proc shape3d_28() {
  apic[43] {	pt3dadd(-268.77, -310.76, -4, 0.52)
	pt3dadd(-268.77, -310.91, -4, 0.52)
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  }
}
proc shape3d_29() {
  apic[45] {	pt3dadd(-201.26, -264.65, -24.6, 0.52)
	pt3dadd(-201.26, -265.1, -24.6, 0.52)
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  }
}
proc shape3d_30() {
  apic[47] {	pt3dadd(-207.4, -228.05, -29.35, 0.89)
	pt3dadd(-208, -228.2, -29.35, 0.89)
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  }
}
proc shape3d_31() {
  apic[49] {	pt3dadd(-284.19, -259.39, -25.9, 0.67)
	pt3dadd(-284.56, -259.68, -25.9, 0.67)
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  }
}
proc shape3d_32() {
  apic[50] {	pt3dadd(-366.23, -290.7, -29.05, 0.44)
	pt3dadd(-366.3, -290.77, -29.05, 0.44)
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  }
}
proc shape3d_33() {
  apic[50] {	pt3dadd(-435.36, -354.71, -20.45, 0.37)
	pt3dadd(-435.59, -354.86, -20.45, 0.37)
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  }
}
proc shape3d_34() {
  apic[51] {	pt3dadd(-345.3, -276.14, -13.15, 0.44)
	pt3dadd(-345.37, -276.29, -13.15, 0.44)
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  }
}
proc shape3d_35() {
  apic[51] {	pt3dadd(-419.64, -310.8, -21.65, 0.3)
	pt3dadd(-420.09, -310.87, -21.65, 0.3)
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  }
}
proc shape3d_36() {
  apic[52] {	pt3dadd(-278.4, -248.71, -34.35, 0.37)
	pt3dadd(-278.77, -248.79, -34.35, 0.37)
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  }
}
proc shape3d_37() {
  apic[53] {	pt3dadd(-249.09, -267.17, -20.9, 0.52)
	pt3dadd(-249.76, -267.4, -20.85, 0.52)
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  }
}
proc shape3d_38() {
  apic[54] {	pt3dadd(-292.25, -321.87, -61.45, 0.22)
	pt3dadd(-292.47, -321.94, -61.45, 0.22)
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  }
}
proc shape3d_39() {
  apic[56] {	pt3dadd(-278.7, -291.74, -20.65, 0.3)
	pt3dadd(-278.7, -292.26, -20.65, 0.3)
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  }
}
proc shape3d_40() {
  apic[56] {	pt3dadd(-325.09, -347.24, -22.05, 0.22)
	pt3dadd(-325.31, -347.39, -22.05, 0.22)
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  }
}
proc shape3d_41() {
  apic[57] {	pt3dadd(-295.62, -266.14, -13.05, 0.37)
	pt3dadd(-296.21, -266.14, -13.05, 0.37)
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  }
}
proc shape3d_42() {
  apic[59] {	pt3dadd(-172.56, -223.61, -34.05, 0.3)
	pt3dadd(-172.56, -223.9, -34.1, 0.3)
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  }
}
proc shape3d_43() {
  apic[60] {	pt3dadd(-166.76, -256.63, -43.3, 0.22)
	pt3dadd(-166.68, -257.07, -43.3, 0.22)
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  }
}
proc shape3d_44() {
  apic[61] {	pt3dadd(-240.45, -214.36, -54.35, 0.3)
	pt3dadd(-241.19, -214.44, -56.8, 0.3)
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  }
}
proc shape3d_45() {
  apic[64] {	pt3dadd(-218.31, -210.25, -36.5, 0.37)
	pt3dadd(-218.53, -210.99, -37.55, 0.37)
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  }
}
proc shape3d_46() {
  apic[66] {	pt3dadd(-166.82, -184.15, -25.55, 0.37)
	pt3dadd(-167.19, -184.15, -25.55, 0.37)
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  }
}
proc shape3d_47() {
  apic[67] {	pt3dadd(-141.43, -153.81, -18.9, 0.37)
	pt3dadd(-141.95, -153.59, -18.9, 0.37)
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  }
}
proc shape3d_48() {
  apic[69] {	pt3dadd(-208.21, -174.82, -13.35, 0.37)
	pt3dadd(-208.8, -174.52, -12.8, 0.37)
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  }
}
proc shape3d_49() {
  apic[70] {	pt3dadd(-183.38, -163.63, -10.55, 0.37)
	pt3dadd(-183.9, -163.78, -10.55, 0.37)
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  }
}
proc shape3d_50() {
  apic[74] {	pt3dadd(-132.72, -170.18, -17.6, 0.44)
	pt3dadd(-132.28, -170.33, -16.4, 0.44)
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  }
}
proc shape3d_51() {
  apic[75] {	pt3dadd(-143.11, -195.43, -13.35, 0.37)
	pt3dadd(-143.11, -195.73, -13.35, 0.37)
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  }
}
proc shape3d_52() {
  apic[76] {	pt3dadd(-147.88, -185.5, -17.65, 0.3)
	pt3dadd(-148.03, -185.65, -17.65, 0.3)
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  }
}
proc shape3d_53() {
  apic[79] {	pt3dadd(-47.54, -121.45, -48.25, 0.37)
	pt3dadd(-47.32, -121.15, -48.3, 0.37)
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  }
}
proc shape3d_54() {
  apic[83] {	pt3dadd(-138.41, -148.33, -36.1, 0.37)
	pt3dadd(-139.3, -149.44, -37.15, 0.37)
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  }
}
proc shape3d_55() {
  apic[83] {	pt3dadd(-186.15, -187.21, -37.35, 0.3)
	pt3dadd(-186.52, -187.35, -37.3, 0.3)
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  }
}
proc shape3d_56() {
  apic[86] {	pt3dadd(-68.1, -120.36, -13.5, 0.37)
	pt3dadd(-67.13, -120.65, -13.5, 0.37)
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  }
}
proc shape3d_57() {
  apic[90] {	pt3dadd(-77.92, -125.64, -20.45, 0.22)
	pt3dadd(-78.07, -125.72, -20.45, 0.22)
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  }
}
proc shape3d_58() {
  apic[91] {	pt3dadd(-63.24, -122.67, -30.85, 0.3)
	pt3dadd(-62.95, -122.52, -30.85, 0.3)
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  }
}
proc shape3d_59() {
  apic[92] {	pt3dadd(-113.68, -109.45, -13.65, 0.37)
	pt3dadd(-113.76, -109.68, -13.65, 0.37)
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  }
}
proc shape3d_60() {
  apic[95] {	pt3dadd(-73.77, -89.99, -27.2, 0.44)
	pt3dadd(-73.11, -90.21, -27.2, 0.44)
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  }
}
proc shape3d_61() {
  apic[95] {	pt3dadd(5.35, -107.02, -49.8, 0.37)
	pt3dadd(5.87, -107.68, -49.8, 0.37)
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  }
}
proc shape3d_62() {
  apic[99] {	pt3dadd(-49.38, -96.76, -57.4, 0.3)
	pt3dadd(-49.08, -96.91, -57.4, 0.3)
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  }
}
proc shape3d_63() {
  apic[104] {	pt3dadd(-99.38, -41.23, -31.6, 0.3)
	pt3dadd(-99.61, -41.23, -31.6, 0.3)
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  }
}
proc shape3d_64() {
  apic[105] {	pt3dadd(-74.93, -32.99, -29.55, 0.3)
	pt3dadd(-75, -32.84, -29.55, 0.3)
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  }
}
proc shape3d_65() {
  apic[105] {	pt3dadd(-116.5, 12.03, -26.35, 0.22)
	pt3dadd(-117.02, 12.11, -26.35, 0.22)
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  }
}
proc shape3d_66() {
  apic[108] {	pt3dadd(-76.87, -20.14, -40.5, 0.37)
	pt3dadd(-77.32, -20.13, -40.5, 0.37)
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  }
}
proc shape3d_67() {
  apic[109] {	pt3dadd(-90.45, -40.33, -30.35, 0.3)
	pt3dadd(-91.19, -40.31, -30.35, 0.3)
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  }
}
proc shape3d_68() {
  apic[110] {	pt3dadd(-41.19, -84.33, -13.65, 0.3)
	pt3dadd(-41.2, -84.62, -13.65, 0.3)
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  }
}
proc shape3d_69() {
  apic[113] {	pt3dadd(-29.89, -71.77, -17.5, 0.22)
	pt3dadd(-30.05, -72.13, -17.5, 0.22)
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  }
}
proc shape3d_70() {
  apic[114] {	pt3dadd(-9.73, -95.57, -13.25, 0.22)
	pt3dadd(-9.36, -95.58, -13.25, 0.22)
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  }
}
proc shape3d_71() {
  apic[115] {	pt3dadd(-87.25, -117.8, -5.35, 0.22)
	pt3dadd(-87.58, -118.62, -4.7, 0.22)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
  shape3d_55()
  shape3d_56()
  shape3d_57()
  shape3d_58()
  shape3d_59()
  shape3d_60()
  shape3d_61()
  shape3d_62()
  shape3d_63()
  shape3d_64()
  shape3d_65()
  shape3d_66()
  shape3d_67()
  shape3d_68()
  shape3d_69()
  shape3d_70()
  shape3d_71()
}

objref all, somatic, axonal, basal, apical, oblique
proc subsets() { local i
  objref all, somatic, axonal, basal, apical, oblique
  all = new SectionList()
    soma all.append()
    for i=0, 4 axon[i] all.append()
    for i=0, 21 dend[i] all.append()
    for i=0, 115 apic[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 4 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 21 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 57 apic[i] apical.append()
	
  oblique = new SectionList()
    for i=58, 115 apic[i] oblique.append()

}

//apic[58]-apic[115] are the oblique dendrites!!!

proc geom() {
}
proc geom_nseg() {
}

proc biophys() {
  forsec all {
    insert pas
	e_pas=0
    Ra = 100
    cm = 1
  }
}

access soma

celldef()

proc set_parameter() { localobj fil setting c r g
fil = new File() 
fil.ropen($s1) 
setting = fil.scanvar() 
c = fil.scanvar()
r = fil.scanvar()
g = fil.scanvar()
forsec all {
		cm=c
		Ra=r
		g_pas=g
	}
fil.close()
}

tstop=1500
t=0
dt=0.05

objref stim1, stim2
stim1= new IClamp(0.5)
stim2= new IClamp(0.5)

stim1.del=200
stim1.dur=3
stim1.amp=0.5

stim2.del=stim1.del+stim1.dur+300
stim2.dur=600
stim2.amp=0.01

set_parameter("params.dat")

objref rect, recv
rect = new Vector() 
recv = new Vector()
 
rect.record(&t)  
recv.record(&soma.v(0.5)) 


finitialize(0.0) 

 
while(t<tstop) {
fadvance()
}


objref savdata 
savdata = new File() 
savdata.wopen("output_Run0.dat") 
objref tempmatrix 
tempmatrix = new Matrix() 
tempmatrix.resize(recv.size(),2) 
tempmatrix.setcol(0, rect) 
tempmatrix.setcol(1, recv)  
tempmatrix.fprint(0, savdata, " %g")  
savdata.close()


