load_file("stdrun.hoc")
load_file("import3d.hoc")
/*
 * Check that global parameters are the same as with the optimization
 */
proc check_parameter(/* name, expected_value, value */){
  strdef error
  if($2 != $3){
    sprint(error, "Parameter %s has different value %f != %f", $s1, $2, $3)
    execerror(error)
  }
}
proc check_simulator() {
  check_parameter("celsius", 34, celsius)
  check_parameter("v_init", -80, v_init)
}

begintemplate CCell
  public init, morphology, geom_nseg_fixed, geom_nsec
  public soma, dend, apic, axon
  create soma[1], dend[1], apic[1], axon[1], myelin[1]

  objref this, morphology, CellRef, segCounts

  public all, somatic, apical, axonal, basal, APC
  objref all, somatic, apical, axonal, basal, APC

proc init(/* ignored, morphology_path */) {
  all = new SectionList()
  apical = new SectionList()
  axonal = new SectionList()
  basal = new SectionList()
  somatic = new SectionList()

  //For compatibility with BBP CCells
  CellRef = this

  forall delete_section()
  
  if(numarg() != 2) {
    load_morphology("/marconi_work/HBP_CDP2_it/OPTCA1-mm/PC_CA1_cAC/model/../morphology/dend-050921AM2_axon-051208AM2.asc")
  } else {
    load_morphology($s2)
  }

  geom_nseg()
  delete_axon()
  insertChannel()
  biophys()
}

proc load_morphology(/* morphology_path */) {localobj m, nl, import
  nl = new Import3d_Neurolucida3()
  nl.quiet = 1
  nl.input($s1)
  import = new Import3d_GUI(nl, 0)
  import.instantiate(this)
}

/*
 * Assignment of mechanism values based on distance from the soma
 * Matches the BluePyOpt method
 */
proc distribute_distance(){local x localobj sl
  strdef stmp, distfunc, mech

  sl = $o1
  mech = $s2
  distfunc = $s3
  this.soma[0] distance(0, 0.5)
  sprint(distfunc, "%%s %s(%%f) = %s", mech, distfunc)
  forsec sl for(x, 0) {
    sprint(stmp, distfunc, secname(), x, distance(x))
    execute(stmp)
  }
}

proc geom_nseg() {
  this.geom_nsec() //To count all sections
  //TODO: geom_nseg_fixed depends on segCounts which is calculated by
  //  geom_nsec.  Can this be collapsed?
  this.geom_nseg_fixed(40)
  this.geom_nsec() //To count all sections
}

proc insertChannel() {
  forsec this.all {
    insert pas
    insert kdr2_hip
    insert na_hip
  }
  forsec this.apical {
    insert kad2_hip
    insert h_hip
    insert cahva_hip
    insert calva_hip
    insert sk_hip
    insert CaDynamics_DC0_hip
  }
  forsec this.axonal {
    insert km2_hip
    insert kap2_hip
  }
  forsec this.basal {
    insert kap2_hip
    insert cahva_hip
    insert calva_hip
    insert sk_hip
    insert CaDynamics_DC0_hip
  }
  forsec this.somatic {
    insert km2_hip
    insert kap2_hip
    insert h_hip
    insert cahva_hip
    insert calva_hip
    insert sk_hip
    insert CaDynamics_DC0_hip
  }
}

proc biophys() {
  
  forsec CellRef.all {
    cm = 1
    ena = 50
    ek = -90
  }
  
  forsec CellRef.apical {
    gk_bar_kdr2_hip = 0.040671448862529061
    gna_bar_na_hip = 0.15046456244210649
    Ra = 331.03441041512104
    g_pas = 8.7979494206503797e-05
    e_pas = -76.398482929929585
    gca_bar_cahva_hip = 0.0008042407226920399
    gca_bar_calva_hip = 9.488370927067097e-05
    gk_bar_sk_hip = 0.0036421353653865954
  }
  
  forsec CellRef.axonal {
    gna_bar_na_hip = 0.2176492113062152
    gk_bar_kdr2_hip = 0.064132433344663661
    gk_bar_km2_hip = 0.00031154069696214426
    gk_bar_kap2_hip = 0.034175653191100261
    Ra = 48.635994279085708
    g_pas = 0.00035211361503536431
    e_pas = -93.824473998431344
  }
  
  forsec CellRef.basal {
    gna_bar_na_hip = 0
    gk_bar_kdr2_hip = 0.02514000818365773
    gk_bar_kap2_hip = 0.0030416431086070146
    Ra = 211.56891890792988
    g_pas = 0.00017788684815304306
    e_pas = -96.14564198688889
    gca_bar_cahva_hip = 0.0008042407226920399
    gca_bar_calva_hip = 9.488370927067097e-05
    gk_bar_sk_hip = 0.0036421353653865954
  }
  
  forsec CellRef.somatic {
    gk_bar_kdr2_hip = 0.016950024246545167
    gna_bar_na_hip = 0.19189077796172505
    gk_bar_km2_hip = 0.00039155122186244982
    gk_bar_kap2_hip = 0.026192976194325285
    gh_bar_h_hip = 0.0011339838939339176
    gca_bar_cahva_hip = 0.0043472781594612146
    gca_bar_calva_hip = 0.00044987328737820738
    gk_bar_sk_hip = 0.054445141257626645
    Ra = 473.74389675835386
    g_pas = 0.00034382992280679856
    e_pas = -87.080435833643961
  }
  
  distribute_distance(CellRef.apical, "gk_bar_kad2_hip", "(1. + 1./100. * %.17g)*0.0033865703037951572")
  distribute_distance(CellRef.apical, "gh_bar_h_hip", "(1. + 3./100. * %.17g)*6.6466447675712986e-06")
}

func sec_count(/* SectionList */) { local nSec
  nSec = 0
  forsec $o1 {
      nSec += 1
  }
  return nSec
}

/*
 * Replace the axon built from the original morphology file with a stub axon
 */
proc delete_axon(){ local nSec, D1, D2
  // preserve the number of original axonal sections
  nSec = sec_count(axonal)

  // Try to grab info from original axon
  if(nSec == 0) { //No axon section present
    D1 = D2 = 1
  } else if(nSec == 1) {
    access axon[0]
    D1 = D2 = diam
  } else {
    access axon[0]
    D1 = diam
    access soma distance() //to calculate distance from soma
    forsec axonal{
      //if section is longer than 60um then store diam and exit from loop
      if(distance(0.5) > 60){
        D2 = diam
        break
      }
    }
  }

  // get rid of the old axon
  forsec axonal{
    delete_section()
  }

  create axon[2]

  access axon[0] {
    L = 30
    diam = D1
    nseg = 1 + 2*int(L/40)
    all.append()
    axonal.append()
  }
  access axon[1] {
    L = 30
    diam = D2
    nseg = 1 + 2*int(L/40)
    all.append()
    axonal.append()
  }
  nSecAxonal = 2
  soma[0] connect axon[0](0), 1
  axon[0] connect axon[1](0), 1
}

/*
 * Iterate over the section and compute how many segments should be allocate to
 * each.
 */
proc geom_nseg_fixed(/* chunkSize */) { local secIndex, chunkSize
  chunkSize = $1
  soma area(.5) // make sure diam reflects 3d points
  secIndex = 0
  forsec all {
    nseg = 1 + 2*int(L/chunkSize)
    segCounts.x[secIndex] = nseg
    secIndex += 1
  }
}

/*
 * Count up the number of sections
 */
proc geom_nsec() { local nSec
  nSecAll = sec_count(all)
  nSecSoma = sec_count(somatic)
  nSecApical = sec_count(apical)
  nSecBasal = sec_count(basal)
  nSecAxonalOrig = nSecAxonal = sec_count(axonal)

  segCounts = new Vector()
  segCounts.resize(nSecAll)
  nSec = 0
  forsec all {
    segCounts.x[nSec] = nseg
    nSec += 1
  }
}
endtemplate CCell