
func lambda_f() { local i, x1, x2, d1, d2, lam
        if (n3d() < 2) {
                return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
        }
        x1 = arc3d(0)
        d1 = diam3d(0)
        lam = 0
        for i=1, n3d()-1 {
                x2 = arc3d(i)
                d2 = diam3d(i)
                lam += (x2 - x1)/sqrt(d1 + d2)
                x1 = x2   d1 = d2
        }
        //  length of the section in units of lambda
        lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)

        return L/lam
}

proc celldef() {
  topol()
  subsets()
  geom()
  geom_nseg()
}

create soma, axon, dend[132]

proc topol() { local i
  connect axon(0), soma(0.5)
  for i = 0, 1 connect dend[i](0), soma(0.5)
  for i = 2, 3 connect dend[i](0), dend[1](1)
  for i = 4, 5 connect dend[i](0), soma(0.5)
  for i = 6, 7 connect dend[i](0), dend[i-1](1)
  connect dend[8](0), dend[6](1)
  connect dend[9](0), dend[5](1)
  for i = 10, 12 connect dend[i](0), dend[i-1](1)
  connect dend[13](0), dend[11](1)
  connect dend[14](0), dend[10](1)
  connect dend[15](0), dend[9](1)
  for i = 16, 17 connect dend[i](0), dend[15](1)
  for i = 18, 24 connect dend[i](0), dend[i-1](1)
  connect dend[25](0), dend[23](1)
  connect dend[26](0), dend[22](1)
  connect dend[27](0), dend[21](1)
  connect dend[28](0), dend[20](1)
  connect dend[29](0), dend[19](1)
  connect dend[30](0), dend[18](1)
  connect dend[31](0), dend[17](1)
  connect dend[32](0), soma(0.5)
  for i = 33, 35 connect dend[i](0), dend[i-1](1)
  connect dend[36](0), dend[34](1)
  for i = 37, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  for i = 47, 48 connect dend[i](0), dend[46](1)
  connect dend[49](0), dend[43](1)
  for i = 50, 51 connect dend[i](0), dend[49](1)
  connect dend[52](0), dend[42](1)
  connect dend[53](0), dend[41](1)
  connect dend[54](0), dend[40](1)
  for i = 55, 56 connect dend[i](0), dend[i-1](1)
  connect dend[57](0), dend[55](1)
  connect dend[58](0), dend[54](1)
  connect dend[59](0), dend[39](1)
  connect dend[60](0), dend[38](1)
  for i = 61, 62 connect dend[i](0), dend[i-1](1)
  connect dend[63](0), dend[61](1)
  connect dend[64](0), dend[60](1)
  connect dend[65](0), dend[37](1)
  for i = 66, 67 connect dend[i](0), dend[65](1)
  for i = 68, 69 connect dend[i](0), dend[67](1)
  for i = 70, 71 connect dend[i](0), dend[69](1)
  connect dend[72](0), dend[36](1)
  for i = 73, 75 connect dend[i](0), dend[i-1](1)
  connect dend[76](0), dend[74](1)
  connect dend[77](0), dend[73](1)
  connect dend[78](0), dend[72](1)
  for i = 79, 80 connect dend[i](0), dend[78](1)
  connect dend[81](0), dend[33](1)
  connect dend[82](0), dend[32](1)
  for i = 83, 84 connect dend[i](0), dend[82](1)
  connect dend[85](0), soma(0.5)
  for i = 86, 88 connect dend[i](0), dend[i-1](1)
  connect dend[89](0), dend[87](1)
  for i = 90, 91 connect dend[i](0), dend[89](1)
  connect dend[92](0), dend[86](1)
  for i = 93, 94 connect dend[i](0), dend[92](1)
  connect dend[95](0), dend[85](1)
  connect dend[96](0), soma(0.5)
  for i = 97, 99 connect dend[i](0), dend[i-1](1)
  connect dend[100](0), dend[98](1)
  connect dend[101](0), dend[97](1)
  for i = 102, 103 connect dend[i](0), dend[101](1)
  connect dend[104](0), dend[96](1)
  for i = 105, 107 connect dend[i](0), soma(0.5)
  for i = 108, 109 connect dend[i](0), dend[107](1)
  connect dend[110](0), soma(0.5)
  for i = 111, 113 connect dend[i](0), dend[i-1](1)
  connect dend[114](0), dend[112](1)
  connect dend[115](0), dend[111](1)
  connect dend[116](0), dend[110](1)
  for i = 117, 118 connect dend[i](0), dend[i-1](1)
  connect dend[119](0), dend[117](1)
  connect dend[120](0), dend[116](1)
  for i = 121, 123 connect dend[i](0), soma(0.5)
  for i = 124, 126 connect dend[i](0), dend[i-1](1)
  connect dend[127](0), dend[125](1)
  connect dend[128](0), dend[124](1)
  for i = 129, 130 connect dend[i](0), dend[128](1)
  connect dend[131](0), dend[123](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-7.12107, 8.41691, -5.78, 2.09379)
	pt3dadd(-6.15142, 8.38223, -5.78, 3.64735)
	pt3dadd(-5.18178, 8.34755, -5.78, 5.31315)
	pt3dadd(-4.21213, 8.31287, -5.78, 6.57088)
	pt3dadd(-3.24248, 8.27818, -5.78, 7.80222)
	pt3dadd(-2.27283, 8.2435, -5.78, 9.00892)
	pt3dadd(-1.30318, 8.20882, -5.78, 9.67405)
	pt3dadd(-0.333537, 8.17414, -5.78, 10.0337)
	pt3dadd(0.636111, 8.13946, -5.78, 10.6453)
	pt3dadd(1.60576, 8.10477, -5.78, 11.8098)
	pt3dadd(2.57541, 8.07009, -5.78, 12.5976)
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  }
}
proc shape3d_2() {
  dend {	pt3dadd(-30.96, 61.9, -19.77, 0.44)
	pt3dadd(-31.33, 61.68, -19.77, 0.37)
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  }
}
proc shape3d_3() {
  dend[2] {	pt3dadd(-47.05, 80.77, -15.93, 1.11)
	pt3dadd(-47.42, 81.21, -15.93, 1.18)
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  }
}
proc shape3d_4() {
  dend[8] {	pt3dadd(-24.16, -8.64, -17.23, 0.44)
	pt3dadd(-24.53, -8.86, -17.23, 0.44)
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  }
}
proc shape3d_5() {
  dend[12] {	pt3dadd(-111.01, 75.35, -32.88, 0.44)
	pt3dadd(-111.38, 76.09, -32.92, 0.44)
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  }
}
proc shape3d_6() {
  dend[18] {	pt3dadd(-93.99, 24.95, -17.65, 0.52)
	pt3dadd(-94.51, 24.21, -17.65, 0.52)
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  }
}
proc shape3d_7() {
  dend[27] {	pt3dadd(-128.56, 4.09, -17.63, 0.44)
	pt3dadd(-128.56, 4.01, -17.63, 0.44)
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  }
}
proc shape3d_8() {
  dend[38] {	pt3dadd(-43.41, -17.23, -9.05, 0.81)
	pt3dadd(-43.71, -17.82, -9.05, 0.81)
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  }
}
proc shape3d_9() {
  dend[44] {	pt3dadd(-155.8, -79.77, -14.48, 0.44)
	pt3dadd(-156.39, -80.07, -14.48, 0.44)
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  }
}
proc shape3d_10() {
  dend[56] {	pt3dadd(-110.92, -81.82, -8.6, 0.37)
	pt3dadd(-110.92, -81.82, -8.43, 0.37)
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  }
}
proc shape3d_11() {
  dend[62] {	pt3dadd(-121, -12.85, -15.55, 0.44)
	pt3dadd(-121.22, -12.92, -15.55, 0.44)
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  }
}
proc shape3d_12() {
  dend[68] {	pt3dadd(-118.98, -11.08, -9.7, 0.59)
	pt3dadd(-119.2, -10.93, -9.7, 0.59)
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  }
}
proc shape3d_13() {
  dend[74] {	pt3dadd(-79.67, -8.09, -9.2, 0.52)
	pt3dadd(-80.26, -8.17, -9.2, 0.52)
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  }
}
proc shape3d_14() {
  dend[77] {	pt3dadd(-69.38, -12.16, -7.08, 0.52)
	pt3dadd(-70.27, -11.94, -7.08, 0.52)
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  }
}
proc shape3d_15() {
  dend[84] {	pt3dadd(-9.97, -41.03, -5.6, 0.37)
	pt3dadd(-10.42, -41.69, -5.6, 0.37)
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  }
}
proc shape3d_16() {
  dend[87] {	pt3dadd(-52.35, -84.47, -6.7, 0.52)
	pt3dadd(-52.87, -84.69, -6.78, 0.59)
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  }
}
proc shape3d_17() {
  dend[99] {	pt3dadd(-11.2, -19.67, -2.92, 0.44)
	pt3dadd(-12.31, -19.3, -2.92, 0.44)
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  }
}
proc shape3d_18() {
  dend[105] {	pt3dadd(-9.47, -24.9, -17.77, 0.44)
	pt3dadd(-9.62, -25.56, -17.77, 0.59)
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  }
}
proc shape3d_19() {
  dend[109] {	pt3dadd(39.07, -2.01, -16.23, 0.44)
	pt3dadd(39.15, -2.6, -16.23, 0.59)
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  }
}
proc shape3d_20() {
  dend[121] {	pt3dadd(-13.55, 25.92, -0.1, 0.59)
	pt3dadd(-13.55, 27.03, -0.1, 0.59)
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  }
}
proc shape3d_21() {
  dend[128] {	pt3dadd(12.54, 25.37, -10.57, 0.59)
	pt3dadd(12.39, 25.81, -10.57, 0.59)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    axon all.append()
    for i=0, 131 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 131 dend[i] basal.append()

}

proc biophys() {
  forsec all {
    insert pas
    Ra = 100
    cm = 1
  }
}

proc geom() {
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}


access soma

celldef()

biophys()
